PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': ''}
  Full-screen window = True
  Monitor = dm_200a
  Resources = ['audio/audio_error_ft-flanker.mp3', 'audio/audio_greatJob.mp3', 'img/left_arrow_red.png', 'img/right_arrow_red.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 0.5000, 0.5000, 0.5000
  expName = mfe_c_face_test
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine JS_code
    CodeComponent JScode
      Code Type = JS
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.3
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      text:
        Arrow Game

        Welcome to the arrow game. In this game, arrows will be quickly flashed on the screen. Your goal is to respond to the direction of the MIDDLE arrow, and to respond as quickly as you can without making mistakes.

        If the MIDDLE arrow is pointing to the right, use your right hand to press the 'K' key on your keyboard. If the MIDDLE arrow is pointing to the left, use your left hand to press the 'S' key on your keyboard.

        Press the 'K' key to continue
    KeyboardComponent welcome_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finishMessage
    TextComponent finishMessage_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your participation!
      wrapWidth = 1.3
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  Routine task_stimRoutine
    CodeComponent task_isi_code
      Code Type = Auto->JS
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      Begin Experiment:
        #no need to initialize thisISI, as already done in practice code snippit
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(3500, 4000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        task_trial_loop.addData('ISI', thisISI)
    ImageComponent bigFace_2
      image [set every repeat] = $straightFace
      opacity = 0.85
      pos = (0, 0.0)
      size = (13.59, 9.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      units = deg
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    ImageComponent cover_background
      image = img/cover_background.png
      pos = (0, -.45)
      size = (8.29, 6.534)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
      units = deg
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    ImageComponent task_centerImg
      image [set every repeat] = $middleStim
      pos [set every repeat] = (0, 0)
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent task_rightImg1
      image [set every repeat] = $rightStim
      pos [set every repeat] = (1.22, 0)
      saveStartStop = False
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .35
      texture resolution = 512
      units = deg
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    ImageComponent task_rightImg2
      image [set every repeat] = $rightStim
      pos [set every repeat] = [2.44,0]
      saveStartStop = False
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
      units = deg
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    ImageComponent task_leftImg1
      image [set every repeat] = $leftStim
      pos [set every repeat] = (-1.22, 0)
      saveStartStop = False
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .35
      texture resolution = 512
      units = deg
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    ImageComponent task_leftImg2
      image [set every repeat] = $leftStim
      pos [set every repeat] = [-2.44,0]
      saveStartStop = False
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
      units = deg
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    ImageComponent task_fixImg
      image [set every repeat] = img/transp_fixation.png
      pos = (0, -.45)
      size = (8.29, 6.534)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    KeyboardComponent task1_stim_keyResp
      allowedKeys = 's','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if task1_stim_keyResp.keys: #if at least one response was made this trial
            if task1_stim_keyResp.keys[0] == 's': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif task1_stim_keyResp.keys[0] == 'k': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        task_trial_loop.addData('accuracy', accuracy)
  Routine prac_stimRoutine
    CodeComponent prac_isi_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the thisISI variable
        thisISI = 0
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(3500, 4000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        prac_trial_loop.addData('ISI', thisISI)


        # show in console for debugging
        #print('thisISI: ', thisISI)
    ImageComponent bigFace
      image [set every repeat] = $straightFace
      opacity = 0.85
      pos = (0., 0.0)
      size = (13.59, 9.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      units = deg
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    ImageComponent cover_background_2
      image [set every repeat] = img/cover_background.png
      pos = (0, -.45)
      size = (8.29, 6.534)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
      units = deg
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    ImageComponent prac_centerImg
      image [set every repeat] = $middleStim
      pos [set every repeat] = (0, 0)
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = .2
      texture resolution = 512
      units = deg
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    ImageComponent prac_rightImg1
      image [set every repeat] = $rightStim
      pos [set every repeat] = (1.22, 0)
      saveStartStop = False
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
      units = deg
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    ImageComponent prac_rightImg2
      image [set every repeat] = $rightStim
      pos [set every repeat] = [2.44,0]
      saveStartStop = False
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
      units = deg
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    ImageComponent prac_leftImg1
      image [set every repeat] = $leftStim
      pos [set every repeat] = (-1.22, 0)
      saveStartStop = False
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
      units = deg
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    ImageComponent prac_leftImg2
      image [set every repeat] = $leftStim
      pos [set every repeat] = [-2.44,0]
      saveStartStop = False
      size [set every repeat] = [1.03, 1.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
      units = deg
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    ImageComponent prac_fixImg
      image [set every repeat] = img/transp_fixation.png
      pos = (0, -.45)
      saveStartStop = False
      size = (8.29, 6.534)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    KeyboardComponent prac_stim_keyResp
      allowedKeys = 's','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent prac_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if prac_stim_keyResp.keys: #if at least one response was made this trial
            if prac_stim_keyResp.keys[0] == 's': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif prac_stim_keyResp.keys[0] == 'k': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        prac_trial_loop.addData('accuracy', accuracy)
  Routine prac_blockReminders
    CodeComponent prac_initAcc_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc = 0
    TextComponent prac_blockText
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You will now practice responding to the arrows. Remember to always respond to the direction of the MIDDLE arrow.

        Respond as quickly as you can without making mistakes.

        To get ready, rest your right and left index fingers on the 'K' and 'S' keys of your keyboard, then press the 'K' key when you are ready to begin.
    KeyboardComponent prac_reminder_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockReminders
    CodeComponent task_blockReminder_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        blockCounter = 0

        #note that we do not need to initialize the accuracy and numCorr vars here
        #because they were already initialilzed in the code snippet of the practice loop
      Begin Routine:
        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 12'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 12'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 12'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 12'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 12'
        elif blockCounter == 6:
            blockNumText = 'Block 6 of 12'
        elif blockCounter == 7:
            blockNumText = 'Block 7 of 12'
        elif blockCounter == 8:
            blockNumText = 'Block 8 of 12'
        elif blockCounter == 9:
            blockNumText = 'Block 9 of 12'
        elif blockCounter == 10:
            blockNumText = 'Block 10 of 12'
        elif blockCounter == 11:
            blockNumText = 'Block 11 of 12'
        elif blockCounter == 12:
            blockNumText = 'Block 12 of 12'
    TextComponent task_blockText
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.3
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    TextComponent task_blockReminders_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Remember to always respond to the direction of the MIDDLE arrow.

        Respond as quickly as you can without making mistakes.

        To get ready, rest your right and left index fingers on the 'K' and 'S' keys of your keyboard, then press the 'K' key when you are ready to begin.
    KeyboardComponent task_blockReminders_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockFeed
    CodeComponent task_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockCounter < 10:
            if blockAcc >= .75:
                if blockAcc < .9:
                    blockFeed = 'Good job'
                    blockFeedCat = 1
                elif blockAcc >= .9:
                    blockFeed = 'Respond faster'
                    blockFeedCat = 2
            elif blockAcc < .75:
                blockFeed = 'Respond more accurately'
                blockFeedCat = 3
        elif blockCounter == 10:
            'You have completed all blocks'

        # save this block's feedback to our output file
        task_trial_loop.addData('blockFeedCat', blockFeedCat)

        #reset the following variables to zero before next block starts
        trialNum = 0
        numCorr = 0
    TextComponent task_blockFeed_text
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockFeed
      wrapWidth = 1.8
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    TextComponent task_blockFeed_text2
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 10
      text [set every repeat] = Press the 'K' key
      wrapWidth = 1.3
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    KeyboardComponent task_blockFeed_keyResp
      allowedKeys = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine prac_blockFeed
    CodeComponent prac_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockAcc >= .75: #if accuracy >= 75% then say practice is complete and end practice loop to continue to main exp
            outPut = 'You have completed the practice' #feedback presented
            prac_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc <= .75: #if accuracy < 75% then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again' #feedback presented
            prac_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        #reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
    TextComponent prac_blockFeed_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press the 'K' key
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp
      allowedKeys = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initFixation
    ImageComponent initFixation_img
      image [set every repeat] = img/transp_fixation.png
      pos = (0, -.45)
      size = (8.29, 6.534)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
      units = deg
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  Routine instructRight
    TextComponent instructRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the 'K' key on your keyboard with your right hand.

        Press the 'K' key to continue
    ImageComponent instructRight_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg1
      image = img/rightArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg1
      image = img/rightArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg2
      image = img/rightArrow.png
      pos = (.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg2
      image = img/rightArrow.png
      pos = (-.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructRight_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconRight
    TextComponent instructInconRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Sometimes the MIDDLE arrow will point in a different direction from the other arrows. However, your goal is to always respond based on the direction of the MIDDLE arrow.

        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the 'K' key on your keyboard with your right hand.

        Press the 'K' key to continue
    ImageComponent instructIncon_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg1
      image = img/leftArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg1
      image = img/leftArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg2
      image = img/leftArrow.png
      pos = (-.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg2
      image = img/leftArrow.png
      pos = (.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructInconRight_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructLeft
    TextComponent instructLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the 'S' key on your keyboard with your left hand.

        Press the 'S' key to continue
    ImageComponent instructLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg1
      image = img/leftArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg1
      image = img/leftArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg2
      image = img/leftArrow.png
      pos = (.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg2
      image = img/leftArrow.png
      pos = (-.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructLeft_keyResp
      allowedKeys [set every repeat] = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconLeft
    TextComponent instructInconLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the 'S' key on your keyboard with your left hand.


        Press the 'S' key to continue
    ImageComponent instructInconLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg1
      image = img/rightArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg1
      image = img/rightArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg2
      image = img/rightArrow.png
      pos = (.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg2
      image = img/rightArrow.png
      pos = (-.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructInconLeft_keyResp
      allowedKeys [set every repeat] = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False #hide mouse cursor
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
  Routine instructMainTask_2
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine surpriseTask
    CodeComponent code_6
      Code Type = Auto->JS
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      Before Experiment:
        # This code will load 8 surprise csv files and then randomly shuffle contents of each column and then saves them.
        import os
        import numpy as np
        import pandas as pd
        import pathlib

        # Make a list of files that we need to load
        # get the current working directory
        current_working_directory = os.getcwd()
        input_path = pathlib.Path(current_working_directory)
        # input_path = pathlib.Path("/Users/kihossei/Documents/GitHub/mfe_c_face/materials/PsychopyTask/mfe_c_face")
        files_list = list(input_path.glob("orig_surp_table*"))
        i = 0 # counter that will be used for saved file names

        for item in files_list:
            csvFile = pd.read_csv(item)
            csvFile['old_face_in_surp'] = np.random.permutation(csvFile['old_face_in_surp'].values) # shuffles rows in this column randomly
            csvFile['new_face_in_surp'] = np.random.permutation(csvFile['new_face_in_surp'].values) # shuffles rows in this column randomly
            csvFile['which_side_old_face_displayed'] = np.random.permutation(csvFile['which_side_old_face_displayed'].values) # shuffles rows in this column randomly
            # saving the dataframe without row number
            # Get the current name of the file
            current_name = item.name
            # Get the new name of the file
            i = i + 1
            new_name = "surp_table{0}.csv".format(i)
            # Rename the file
            new_item = pathlib.Path.joinpath(item.parent, new_name)
            csvFile.to_csv(new_item, index = False)
      Begin Experiment:
        old_img_position = [0, 0]
        new_img_position = [0, 0]
      Begin Routine:
        if which_side_old_face_displayed == 'right':
            old_img_position = [13.3, 1]
            new_img_position = [-13.3, 1]
        elif which_side_old_face_displayed == 'left':
            old_img_position = [-13.3, 1]
            new_img_position = [13.3, 1]
    TextComponent text
      letterHeight = 1.5
      pos = (0, 10)
      startVal [time (s)] = 0.0
      text = Choose the face you have seen before (old)
      units = deg
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    ImageComponent old_face_image
      image [set every repeat] = $old_face_in_surp
      pos [set every repeat] = old_img_position
      size = (13.59, 9.55)
      startVal [time (s)] = 0.0
      units = deg
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    ImageComponent new_face_image
      image [set every repeat] = $new_face_in_surp
      pos [set every repeat] = new_img_position
      size = (13.59, 9.55)
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent instructsurpA1_right
      letterHeight = 1.2
      pos [set every repeat] = (13.3, -5)
      startVal [time (s)] = 0.0
      text [set every repeat] = Right - 'K' Key
      units = deg
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    TextComponent instructsurpA2_left
      letterHeight = 1.2
      pos = (-13.3, -5)
      startVal [time (s)] = 0.0
      text [set every repeat] = Left - 'S' Key
      units = deg
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    KeyboardComponent surprise_key_resp
      allowedKeys = 's','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine surpriseInstruct_2
  Routine surpriseInstruct
    TextComponent instruct_surprise1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin a task in which you will be shown two images of faces. Then, you need to choose the face image that you think you have seen in the previous Arrow game (old face).

        For example:

        If the face image on the right side is the one you think you have seen in the Arrow game, press the K key.

        If the face image on the left side is the one you think you have seen in the Arrow game, press the S key.

        Please press the K key to continue.
    KeyboardComponent instruct_surp1_key_resp
      allowedKeys = 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine fixation1
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
  Routine error_commitTask
    ImageComponent stimulus_3
      image [set every repeat] = $surpriseFaces
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instructsurpA1_right_3
      letterHeight = 0.025
      pos [set every repeat] = (0.4, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA1
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    TextComponent instructsurpA2_left_3
      letterHeight = 0.025
      pos = (-0.4, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA2
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    KeyboardComponent friendly_key_resp_2
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine errorInstruct
    TextComponent instructMainTask_text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskTextSource
      wrapWidth = 1.3
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    KeyboardComponent instructMainTask_keyResp_3
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine errorComm_Instruct
    TextComponent instruct_surprise1_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin a game in which you will be asked if you made an error/errors around the displayed face on the screen during the arrow game.


        For example, if you think that you have made an error/errors around (before/during/after) the displayed face during the arrow game, you should select "I made an error around this face" as your response.

        Press right key to proceed.
    KeyboardComponent instruct_surp1_key_resp_3
      allowedKeys = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine botherRate
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
    TextComponent botherRate_text
      letterHeight = 0.03
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        How much did it bother you when you made an error during the arrow game?

        Your answer should be on a scale from 0 (not at all) to 10 (very much).


        Please enter your answer using the keyboard.
        After entering your answer, press the 'Space' key to continue
    TextboxComponent bother_text_box
      anchor = bottom-center
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent botherRate_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine errorPercentage
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
    TextComponent errorNumbers_text_3
      letterHeight = 0.03
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        Excluding the practice, what percentage of your responses do you think were errors during the arrow game?

        Please provide a number as your best estimate.

        Please enter your answer using the keyboard.
        After entering your answer, press the 'Space' key to continue
    TextboxComponent errorPercent_text_box
      anchor = bottom-center
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent errorN_key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine errorNumbers
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
    TextComponent errorNumbers_text_2
      letterHeight = 0.03
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        Excluding the practice, How many errors do you think you made in this game?

        Please provide a number as your best estimate.


        Please enter your answer using the keyboard.
        After entering your answer, press the 'Space' key to continue
    TextboxComponent errorNum_text_box
      anchor = bottom-center
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent errorN_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine redCap1
    TextComponent redCap1_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please return to the questionnaires tab of your browser and answer the questions of a questionnaire.

        Please do not close this tab as you will need to return to this tab after you complete answering the questions of the questionnaire.

        -----------------------------------------

        Did you answer the questions of the questionnaire?

        If yes, please press the 'K' key to continue
    KeyboardComponent redcap1_key
      allowedKeys = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ringBell
    TextComponent ringBell_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Ring the bell to let the experimenter know that you finished the practice.
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    KeyboardComponent bellKey
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ringBell2
    TextComponent ringBell_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please ring the bell to let the experimenter know you finished the game.
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    KeyboardComponent bellKey_2
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ringBell3
    TextComponent ringBell_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Ring the bell to let the experimenter know when you complete answering the surveys.
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    KeyboardComponent bellKey_3
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ringBell4
    TextComponent ringBell_text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Ring the bell to let the experimenter know you completed the game.
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    KeyboardComponent bellKey_4
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine surp_taskReminders
    CodeComponent task_blockReminder_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        blockCounterZ1 = 0
        blockNumText = ""
      Begin Routine:
        blockCounterZ1 = blockCounterZ1 + 1

        if blockCounterZ1 == 1:
            blockNumText = 'Block 1 of 8'
        elif blockCounterZ1 == 2:
            blockNumText = 'Block 2 of 8'
        elif blockCounterZ1 == 3:
            blockNumText = 'Block 3 of 8'
        elif blockCounterZ1 == 4:
            blockNumText = 'Block 4 of 8'
        elif blockCounterZ1 == 5:
            blockNumText = 'Block 5 of 8'
        elif blockCounterZ1 == 6:
            blockNumText = 'Block 6 of 8'
        elif blockCounterZ1 == 7:
            blockNumText = 'Block 7 of 8'
        elif blockCounterZ1 == 8:
            blockNumText = 'Block 8 of 8'
    TextComponent text_2
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
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    TextComponent task_blockText_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text [set every repeat]:
        Remember that you need to choose the face you think you have seen in the Arrow game.

        Press K for the right image, or press S for the left image.

        Press the "K" key when you are ready to begin.
    KeyboardComponent task_blockReminders_keyResp_2
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initFixation_2
    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fixation2
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # make range from a to b in n stepsizes
        ISIRange3 = np.linspace(800, 1200, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange3)
        thisISI3 = ISIRange3[0]/1000 # the first item of the shuffled array
        surprise_block_loop.addData('thisISI3', thisISI3)
    PolygonComponent polygon
      durationEstim = 1
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI3
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Flow
  Routine JS_code
  Routine setup
  Routine welcome
  Routine instructRight
  Routine instructLeft
  Routine instructInconRight
  Routine instructInconLeft
  LoopInitiator prac_block_loop loopType="TrialHandler"
    conditionsFile = blockSelect_practice.csv
    loopType = random
    nReps = 999
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    Routine prac_blockReminders
    Routine initFixation
    LoopInitiator prac_trial_loop loopType="TrialHandler"
      conditionsFile = $whichBlock
      loopType = random
      nReps = 1
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      Routine prac_stimRoutine
    LoopTerminator prac_trial_loop
    Routine prac_blockFeed
  LoopTerminator prac_block_loop
  Routine ringBell
  LoopInitiator task_block_loop loopType="TrialHandler"
    conditionsFile = blockSelect.csv
    loopType = random
    nReps = 0
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    Routine task_blockReminders
    Routine initFixation
    LoopInitiator task_trial_loop loopType="TrialHandler"
      conditionsFile = $whichBlock
      loopType = random
      nReps = 1
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      Routine task_stimRoutine
    LoopTerminator task_trial_loop
    Routine task_blockFeed
  LoopTerminator task_block_loop
  Routine ringBell2
  Routine errorNumbers
  Routine errorPercentage
  Routine botherRate
  Routine ringBell3
  Routine surpriseInstruct
  LoopInitiator surprise_block_loop loopType="TrialHandler"
    conditionsFile = surpriseBlock_select_A.xlsx
    loopType = sequential
    nReps = 1
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    Routine surp_taskReminders
    Routine fixation2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $whichSurpriseBlock
      loopType = random
      nReps = 1
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      Routine surpriseTask
      Routine fixation2
    LoopTerminator trials
  LoopTerminator surprise_block_loop
  Routine ringBell4
  Routine finishMessage
